CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:9925

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr
    Name of the file:allplates_PILOT.csv
    Load images based on this data?:Yes
    Base image location:Elsewhere...|/cbnt/cbimage/HCS
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata fields for grouping:PlateID

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:OrigHoechst
    Name the output image:IllumHoechst
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:OrigER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:OrigSyto
    Name the output image:IllumSyto
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigPh_golgi
    Name the output image:IllumPh_golgi
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:IllumHoechst
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    Select method for constructing file names:Single name
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    Enter single file name:illumHoechst
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    Select file format to use:mat
    Output file location:Elsewhere...|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Last cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumER
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    Select method for constructing file names:Single name
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    Enter single file name:illumER
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    Select file format to use:mat
    Output file location:Elsewhere...|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Last cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumSyto
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    Select method for constructing file names:Single name
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    Enter single file name:illumSyto
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    Select file format to use:mat
    Output file location:Elsewhere...|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Last cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumPh_golgi
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    Select method for constructing file names:Single name
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    Enter single file name:illumPh_golgi
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    Select file format to use:mat
    Output file location:Elsewhere...|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Last cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
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    Select method for constructing file names:Single name
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    Enter single file name:illumMito
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    Select file format to use:mat
    Output file location:Elsewhere...|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/Pilot_rerun_illumcorr/\\g<PlateID>
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Last cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

CreateBatchFiles:[module_num:12|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/cbnt/cbimage/HCS
    Cluster root path:/cbnt/cbimage/HCS
