CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:8
HasImagePlaneDetails:False

LoadData:[module_num:1|svn_version:\'Unknown\'|variable_revision_number:6|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Input data file location:Elsewhere...\x7C
    Name of the file:
    Load images based on this data?:Yes
    Base image location:Default Input Folder\x7C
    Process just a range of rows?:No
    Rows to process:1,2
    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\'\', \n      dtype=\'\x7CS1\')|enabled:True|wants_pause:False]
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide

SaveImages:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:AGP
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigAGP
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum_corrected
    Saved file format:tif
    Output file location:Default Output Folder sub-folder\x7Cillum_corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

SaveImages:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:DNA
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum_corrected
    Saved file format:tif
    Output file location:Default Output Folder sub-folder\x7Cillum_corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

SaveImages:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:ER
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigER
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum_corrected
    Saved file format:tif
    Output file location:Default Output Folder sub-folder\x7Cillum_corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

SaveImages:[module_num:6|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:Mito
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigMito
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum_corrected
    Saved file format:tif
    Output file location:Default Output Folder sub-folder\x7Cillum_corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

SaveImages:[module_num:7|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:RNA
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRNA
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum_corrected
    Saved file format:tif
    Output file location:Default Output Folder sub-folder\x7Cillum_corrected
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

CreateBatchFiles:[module_num:8|svn_version:\'Unknown\'|variable_revision_number:7|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:False|wants_pause:False]
    Store batch files in default output folder?:Yes
    Output folder path:/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/HDAC_inhibitors/20100803
    Are the cluster computers running Windows?:No
    Hidden\x3A in batch mode:No
    Hidden\x3A in distributed mode:No
    Hidden\x3A default input folder at time of save:/cbnt/cbimage/HCS
    Hidden\x3A revision number:10346
    Hidden\x3A from old matlab:No
    Launch BatchProfiler:No
